PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B', 'C', 'D', 'E', 'F', 'G', 'H']"}
  Full-screen window = True
  Resources = ['video&audio\\testVideo.mp4', 'video&audio\\dogLookAway.png', 'video&audio\\frogsMoment.png', 'video&audio\\frogStretch.png', 'video&audio\\kittenBrew.png', 'video&audio\\relaxPolar.png', 'video&audio\\squirrelDrink.png']
  Screen = 1
  Units = norm
  Use version = 2021.1.4
  Window size (pixels) = [1366, 768]
  color = $(1.0000, 0.9608, 0.9608)
  expName = student_TT_local
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Routines
  Routine AOMI
    CodeComponent AOMI1Counter
      Code Type = Both
      Begin JS Experiment:
        AOMI1_counter = -1
      Begin JS Routine:
        AOMI1_counter += 1
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_2.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                trials_2.finished = true;
            }
        }
    TextComponent wordAOMI1
      color = black
      letterHeight = 0.1
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $cont_time
      text [set every repeat] = $AOMIfirst_words
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    MovieComponent video1
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $first_vids
      saveStartStop = False
      size = [0.9, 0.6]
      startVal [time (s)] = 0
      stopVal [duration (s)] = $cont_time
      units = height
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    KeyboardComponent AOMI1bkdgKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = cont_time
      store = all keys
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    CodeComponent videoJS_1
      Code Type = JS
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        video1.stop();
        video1.seek(0);
        video1.play();
      Each JS Frame:
        /*if ((t >= 1.0)) {
            video1.play();
            } else {
                video1.stop();
                }
        */
      End JS Routine:
        video1.stop();
  Routine typePrep
    TextComponent typeText_AOMI
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Get ready!
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    KeyboardComponent AOMI_promptBkgdKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = all keys
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  Routine AOMI1task
    CodeComponent AOMI1code
      Code Type = Both
      Begin JS Routine:
        //mykb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        //mykb.start();
        modify = false;
        text2.text = " ";
        event.clearEvents();
        // Clear keyboard events
        //mykb.clearEvents();
      Begin Routine:
        modify = False
        text2.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
        #typedCorr=[]
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
            #RTs.append(t) #add to the variable RTs the host clock given by 't'
            if 'space' in keys:
                text2.text = text2.text + ' '
            elif 'backspace' in keys:
                text2.text = text2.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift?
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_2.finished = True
            elif 'comma' in keys:
                text2.text = text2.text + ','
            elif 'period' in keys:
                text2.text = text2.text + '.'
            elif 'slash' in keys:
                text2.text = text2.text + '/'
            elif 'pound' in keys:
                text2.text = text2.text + '#'
            elif 'apostrophe' in keys:
                text2.text = text2.text + "'"
            elif 'backslash' in keys:
                text2.text = text2.text + "\\" #only prints one slash
            elif 'minus' in keys:
                text2.text = text2.text + '-'
            elif 'equal' in keys:
                text2.text = text2.text + '='
            elif 'semicolon' in keys:
                text2.text = text2.text + ';'
            elif 'bracketleft' in keys:
                text2.text = text2.text + '['
            elif 'bracketright' in keys:
                text2.text = text2.text + ']'
            elif 'capslock' in keys:
                text2.text = text2.text + '' #display nothing
            elif 'tab' in keys:
                text2.text = text2.text + ''
            elif 'lwindows' in keys:
                text2.text = text2.text + ''
            elif 'menu' in keys:
                text2.text = text2.text + ''
            elif 'lalt' in keys:
                text2.text = text2.text + ''
            elif 'ralt' in keys:
                text2.text = text2.text + ''
            elif 'lctrl' in keys:
                text2.text = text2.text + ''
            elif 'rctrl' in keys:
                text2.text = text2.text + ''
            elif 'left' in keys:
                text2.text = text2.text + ''
            elif 'right' in keys:
                text2.text = text2.text + ''
            elif 'up' in keys:
                text2.text = text2.text + ''
            elif 'down' in keys:
                text2.text = text2.text + ''
            elif 'delete' in keys:
                text2.text = text2.text + ''
            else:
                if modify:
                    text2.text = text2.text + keys[0].upper()
                    modify = False
                else:
                    text2.text = text2.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                text2.text = (text2.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    text2.text = text2.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (_pj.in_es6("comma", keys)) {
                                text2.text = (text2.text + ",");
                            } else {
                                if (_pj.in_es6("period", keys)) {
                                    text2.text = (text2.text + ".");
                                } else {
                                    if (_pj.in_es6("slash", keys)) {
                                        text2.text = (text2.text + "/");
                                    } else {
                                         if (_pj.in_es6("apostrophe", keys)) {
                                             text2.text = (text2.text + "'");
                                         } else {
                                             if (_pj.in_es6("backslash", keys)) {
                                                 text2.text = (text2.text + "#");
                                             } else {
                                                 if (_pj.in_es6("minus", keys)) {
                                                     text2.text = (text2.text + "-");
                                                 } else {
                                                     if (_pj.in_es6("equal", keys)) {
                                                         text2.text = (text2.text + "=");
                                                     } else {
                                                         if (_pj.in_es6("semicolon", keys)) {
                                                             text2.text = (text2.text + ";");
                                                         } else {
                                                             if (_pj.in_es6("bracketleft", keys)) {
                                                                 text2.text = (text2.text + "[");
                                                             } else {
                                                                 if (_pj.in_es6("bracketright", keys)) {
                                                                     text2.text = (text2.text + "]");
                                                                 } else {
                                                                     if (_pj.in_es6("capslock", keys)) {
                                                                         text2.text = (text2.text + "");
                                                                     } else {
                                                                         if (_pj.in_es6("tab", keys)) {
                                                                             text2text = (text2.text + "");
                                                                         } else {
                                                                             if (_pj.in_es6("lcommand", keys)) {
                                                                                 text2.text = (text2.text + "");
                                                                             } else {
                                                                                 if (_pj.in_es6("menu", keys)) {
                                                                                     text2.text = (text2.text + "");
                                                                                 } else {
                                                                                     if (_pj.in_es6("loption", keys)) {
                                                                                         text2.text = (text2.text + "");
                                                                                     } else {
                                                                                         if (_pj.in_es6("ralt", keys)) {
                                                                                             text2.text = (text2.text + "");
                                                                                         } else {
                                                                                             if (_pj.in_es6("lcontrol", keys)) {
                                                                                                 text2.text = (text2.text + "");
                                                                                             } else {
                                                                                                 if (_pj.in_es6("rcontrol", keys)) {
                                                                                                     text2.text = (text2.text + "");
                                                                                                 } else {
                                                                                                     if (_pj.in_es6("left", keys)) {
                                                                                                         text2.text = (text2.text + "");
                                                                                                     } else {
                                                                                                         if (_pj.in_es6("right", keys)) {
                                                                                                             text2.text = (text2.text + "");
                                                                                                         } else {
                                                                                                             if (_pj.in_es6("up", keys)) {
                                                                                                                 text2.text = (text2.text + "");
                                                                                                             } else {
                                                                                                                 if (_pj.in_es6("down", keys)) {
                                                                                                                     text2.text = (text2.text + "");
                                                                                                                 } else {
                                                                                                                     if (_pj.in_es6("delete", keys)) {
                                                                                                                         text2.text = (text2.text + "");
                                                                                                                     } else {
                                                                                                                         if (_pj.in_es6("grave", keys)) { // break key to skip through conditions if needed
                                                                                                                             continueRoutine = false;
                                                                                                                             trials_2.finished = true;
                                                                                                                         } else {
                                                                                                                             if (modify) {
                                                                                                                                 text2.text = (text2.text + keys[0].toUpperCase());
                                                                                                                                 modify = false;
                                                                                                                             } else {
                                                                                                                               text2.text = (text2.text + keys[0]);
                                                                                                                             }
                                                                                                                         }
                                                                                                                     }
                                                                                                                 }
                                                                                                             }
                                                                                                         }
                                                                                                     }
                                                                                                 }
                                                                                             }
                                                                                         }
                                                                                     }
                                                                                 }
                                                                             }
                                                                         }
                                                                     }
                                                                 }
                                                             }
                                                         }
                                                     }
                                                 }
                                             }
                                         }
                                     }
                                 }
                             }
                         }
                     }
                 }
            }
        }
      End JS Routine:
        trials_2.addData("AOMI1_typedWord", text2.text);
      End Routine:
        #if text0.text == display:
         #   typedCorr.append('1')
        #else:
         #   typedCorr.append('0')
            #Above not working

        trials_2.addData("AOMI1_typedWord", text2.text)
        #trials.addData("typedWordCorr", typedCorr)
    TextComponent dispAOMI1
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $AOMIfirst_words
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    TextComponent text2
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent AOMI1keys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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  Routine AOMI1_break
    CodeComponent AOMI1break
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        //if ((! _pj.in_es6(trials_2.thisN, [14]))) {
        //if ((! _pj.in_es6(trials_2.getTrialIndex(14)))) {
        if (AOMI1_counter !== 9) {
            continueRoutine = false;
            }


        /*if (AOMI1_counter !== 9) {
            continueRoutine = false;
            } else if (AOMI1_counter !== 19) {
                continueRoutine = false;
                }*/

        //if( (A && !B) || (B && !A) ) { ... }
      Begin Routine:
        if not trials_2.thisN in [9]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 14th loop iteration,
        #(after 15 trials), otherwise routine is not shown
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                trials_2.finished = true;
            }
        }
    TextComponent AOMI1breakTxt
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.

        REMINDER: Make sure you watch the videos during the task!
    ImageComponent breakImage2
      image = video&audio/dogLookAway.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent AOMI1breakKey
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_AOMI
    TextComponent instrAOMI1
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_1
      wrapWidth = 1.5
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    ImageComponent AOMIinstrImage
      image [set every repeat] = $AOMI_Ima
      pos = (0, -0.4)
      saveStartStop = False
      size [set every repeat] = (AOMI_w, AOMI_h)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_key7
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AOMIprep
    CodeComponent cancelLoop4
      Code Type = Both
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIpracLoop.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                AOMIpracLoop.finished = true;
            }
        }
    TextComponent AOMIprepTxt
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Rest your hands on your keyboard now.

        Observe and imagine!
  Routine AOMIprac
    CodeComponent AOMIprac_code
      Code Type = Py
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIpracLoop.finished = True
    TextComponent AOMIprac1
      color = black
      letterHeight = 0.1
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prac_time
      text [set every repeat] = $practiceWords
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    MovieComponent videoPrac1
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $pracVid_1
      saveStartStop = False
      size = [0.9, 0.6]
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prac_time
      units = height
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    KeyboardComponent AOMI1_BkgdKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prac_time
      store = all keys
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    CodeComponent videoJS_prac
      Code Type = Both
      Begin JS Routine:
        videoPrac1.stop();
        videoPrac1.seek(0);
        videoPrac1.play();
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIpracLoop.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                AOMIpracLoop.finished = true;
            }
        }
      End JS Routine:
        videoPrac1.stop();
  Routine taskAOMI_prac
    CodeComponent AOMI1pracCode
      Code Type = Both
      Begin JS Routine:
        //mykb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        //mykb.start();
        modify = false;
        AOMIpracTxt.text = " ";
        event.clearEvents();
        // Clear keyboard events
        //mykb.clearEvents();
      Begin Routine:
        modify = False
        AOMIpracTxt.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
        #typedCorr=[]
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
            #RTs.append(t) #add to the variable RTs the host clock given by 't'
            if 'space' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ' '
            elif 'backspace' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift?
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIpracLoop.finished = True
            elif 'comma' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ','
            elif 'period' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '.'
            elif 'slash' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '/'
            elif 'pound' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '#'
            elif 'apostrophe' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + "'"
            elif 'backslash' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + "\\" #only prints one slash
            elif 'minus' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '-'
            elif 'equal' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '='
            elif 'semicolon' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ';'
            elif 'bracketleft' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '['
            elif 'bracketright' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ']'
            elif 'capslock' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + '' #display nothing
            elif 'tab' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'lwindows' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'menu' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'lalt' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'ralt' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'lctrl' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'rctrl' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'left' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'right' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'up' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'down' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            elif 'delete' in keys:
                AOMIpracTxt.text = AOMIpracTxt.text + ''
            else:
                if modify:
                    AOMIpracTxt.text = AOMIpracTxt.text + keys[0].upper()
                    modify = False
                else:
                    AOMIpracTxt.text = AOMIpracTxt.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                AOMIpracTxt.text = (AOMIpracTxt.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    AOMIpracTxt.text = AOMIpracTxt.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (_pj.in_es6("comma", keys)) {
                                AOMIpracTxt.text = (AOMIpracTxt.text + ",");
                            } else {
                                if (_pj.in_es6("period", keys)) {
                                    AOMIpracTxt.text = (AOMIpracTxt.text + ".");
                                } else {
                                    if (_pj.in_es6("slash", keys)) {
                                        AOMIpracTxt.text = (AOMIpracTxt.text + "/");
                                    } else {
                                         if (_pj.in_es6("apostrophe", keys)) {
                                             AOMIpracTxt.text = (AOMIpracTxt.text + "'");
                                         } else {
                                             if (_pj.in_es6("backslash", keys)) {
                                                 AOMIpracTxt.text = (AOMIpracTxt.text + "#");
                                             } else {
                                                 if (_pj.in_es6("minus", keys)) {
                                                     AOMIpracTxt.text = (AOMIpracTxt.text + "-");
                                                 } else {
                                                     if (_pj.in_es6("equal", keys)) {
                                                         AOMIpracTxt.text = (AOMIpracTxt.text + "=");
                                                     } else {
                                                         if (_pj.in_es6("semicolon", keys)) {
                                                             AOMIpracTxt.text = (AOMIpracTxt.text + ";");
                                                         } else {
                                                             if (_pj.in_es6("bracketleft", keys)) {
                                                                 AOMIpracTxt.text = (AOMIpracTxt.text + "[");
                                                             } else {
                                                                 if (_pj.in_es6("bracketright", keys)) {
                                                                     AOMIpracTxt.text = (AOMIpracTxt.text + "]");
                                                                 } else {
                                                                     if (_pj.in_es6("capslock", keys)) {
                                                                         AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                     } else {
                                                                         if (_pj.in_es6("tab", keys)) {
                                                                             AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                         } else {
                                                                             if (_pj.in_es6("lcommand", keys)) {
                                                                                 AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                             } else {
                                                                                 if (_pj.in_es6("menu", keys)) {
                                                                                     AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                 } else {
                                                                                     if (_pj.in_es6("loption", keys)) {
                                                                                         AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                     } else {
                                                                                         if (_pj.in_es6("ralt", keys)) {
                                                                                             AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                         } else {
                                                                                             if (_pj.in_es6("lcontrol", keys)) {
                                                                                                 AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                             } else {
                                                                                                 if (_pj.in_es6("rcontrol", keys)) {
                                                                                                     AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                                 } else {
                                                                                                     if (_pj.in_es6("left", keys)) {
                                                                                                         AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                                     } else {
                                                                                                         if (_pj.in_es6("right", keys)) {
                                                                                                             AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                                         } else {
                                                                                                             if (_pj.in_es6("up", keys)) {
                                                                                                                 AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                                             } else {
                                                                                                                 if (_pj.in_es6("down", keys)) {
                                                                                                                     AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                                                 } else {
                                                                                                                     if (_pj.in_es6("delete", keys)) {
                                                                                                                         AOMIpracTxt.text = (AOMIpracTxt.text + "");
                                                                                                                     } else {
                                                                                                                         if (_pj.in_es6("grave", keys)) { // break key to skip through conditions if needed
                                                                                                                             continueRoutine = false;
                                                                                                                             AOMIpracLoop.finished = true;
                                                                                                                         } else {
                                                                                                                             if (modify) {
                                                                                                                                 AOMIpracTxt.text = (AOMIpracTxt.text + keys[0].toUpperCase());
                                                                                                                                 modify = false;
                                                                                                                             } else {
                                                                                                                               AOMIpracTxt.text = (AOMIpracTxt.text + keys[0]);
                                                                                                                             }
                                                                                                                         }
                                                                                                                     }
                                                                                                                 }
                                                                                                             }
                                                                                                         }
                                                                                                     }
                                                                                                 }
                                                                                             }
                                                                                         }
                                                                                     }
                                                                                 }
                                                                             }
                                                                         }
                                                                     }
                                                                 }
                                                             }
                                                         }
                                                     }
                                                 }
                                             }
                                         }
                                     }
                                 }
                             }
                         }
                     }
                 }
            }
        }
    TextComponent dispAOMI1prac
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $practiceWords
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    TextComponent AOMIpracTxt
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent AOMI1pracKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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  Routine startMainAOMI
    TextComponent startAOMI1
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You have completed the practice.

        Remember to place your hands on your keyboard, observe the video and imagine whenever a video starts.

        You will be offered breaks after every 10 words (twice in this section). Please take these as you need them.

        Press 'enter/return' on your keyboard when you are ready to start the task.
    KeyboardComponent start_key8
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AOMI1rateTyping
    CodeComponent skipCode2
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIrateLoop.finished = True
    TextComponent AOMI1rateType
      color = black
      letterHeight = 0.07
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rateInstr
      wrapWidth = 1.5
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    ImageComponent AOMI1typeScale
      image [set every repeat] = $ratingScale
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent AOMI1rateTypeKey
      allowedKeys = ['1', '2', '3', '4', '5']
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine baseInstructions
    CodeComponent code_JS
      Code Type = JS
      Before JS Experiment:
        import PsychoPolyFill from './PsychoPolyfill.js';
      Begin JS Experiment:
        PsychoPolyFill(expInfo.psychopyVersion, psychoJS, util);

        /*thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;*/
        /*Array.prototype.count = function(value) {
        let count = 0;
        this.forEach(item => {
        if (item === value) {
        count++;
        }
        });
        return count;
        }
        sort = function(array) {
            return array.sort();
        }
        or for a numerical sort
        sort = function(array) {
            return array.sort((a, b) => (a - b));
        }

        Array.prototype.index = [].indexOf; */
    TextComponent instrBase
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $begInstruct
      wrapWidth = 1.5
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    ImageComponent baseInstrImage
      image [set every repeat] = $baseIma
      pos = (0, -0.4)
      saveStartStop = False
      size [set every repeat] = (base_w, base_h)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_key
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    CodeComponent pracCounter
      Code Type = Both
      Begin JS Experiment:
        prac_counter = -1
      Begin JS Routine:
        prac_counter += 1
        console.log(prac_counter); //displays value of prac_counter in console to see if this works correctly
      Begin Routine:
        event.clearEvents('keyboard')
        counter = -1
        counter += 1
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                practice_control.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                practice_control.finished = true;
            }
        }
    TextComponent prac_word
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $pracWords
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    TextComponent pracFixation
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent prac_typeText
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = Get ready!
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    KeyboardComponent pracBkgdKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = all keys
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  Routine pracTask
    CodeComponent prac_code
      Code Type = Both
      Begin JS Routine:
        modify = false;
        pracText1.text = " ";
        event.clearEvents();
      Begin Routine:
        modify = False
        pracText1.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
            if 'space' in keys:
                pracText1.text = pracText1.text + ' '
            elif 'backspace' in keys:
                pracText1.text = pracText1.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                practice_control.finished = True
            elif 'comma' in keys:
                pracText1.text = pracText1.text + ','
            elif 'period' in keys:
                pracText1.text = pracText1.text + '.'
            elif 'slash' in keys:
                pracText1.text = pracText1.text + '/'
            elif 'pound' in keys:
                pracText1.text = pracText1.text + '#'
            elif 'apostrophe' in keys:
                pracText1.text = pracText1.text + "'"
            elif 'backslash' in keys:
                pracText1.text = pracText1.text + "\\" #only prints one slash
            elif 'minus' in keys:
                pracText1.text = pracText1.text + '-'
            elif 'equal' in keys:
                pracText1.text = pracText1.text + '='
            elif 'semicolon' in keys:
                pracText1.text = pracText1.text + ';'
            elif 'bracketleft' in keys:
                pracText1.text = pracText1.text + '['
            elif 'bracketright' in keys:
                pracText1.text = pracText1.text + ']'
            elif 'capslock' in keys:
                pracText1.text = pracText1.text + '' #display nothing
            elif 'tab' in keys:
                pracText1.text = pracText1.text + ''
            elif 'lwindows' in keys:
                pracText1.text = pracText1.text + ''
            elif 'menu' in keys:
                pracText1.text = pracText1.text + ''
            elif 'lalt' in keys:
                pracText1.text = pracText1.text + ''
            elif 'ralt' in keys:
                pracText1.text = pracText1.text + ''
            elif 'lctrl' in keys:
                pracText1.text = pracText1.text + ''
            elif 'rctrl' in keys:
                pracText1.text = pracText1.text + ''
            elif 'left' in keys:
                pracText1.text = pracText1.text + ''
            elif 'right' in keys:
                pracText1.text = pracText1.text + ''
            elif 'up' in keys:
                pracText1.text = pracText1.text + ''
            elif 'down' in keys:
                pracText1.text = pracText1.text + ''
            elif 'delete' in keys:
                pracText1.text = pracText1.text + ''
            else:
                if modify:
                    pracText1.text = pracText1.text + keys[0].upper()
                    modify = False
                else:
                    pracText1.text = pracText1.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                pracText1.text = (pracText1.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    pracText1.text = pracText1.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (_pj.in_es6("comma", keys)) {
                                pracText1.text = (pracText1.text + ",");
                            } else {
                                if (_pj.in_es6("period", keys)) {
                                    pracText1.text = (pracText1.text + ".");
                                } else {
                                    if (_pj.in_es6("slash", keys)) {
                                        pracText1.text = (pracText1.text + "/");
                                    } else {
                                         if (_pj.in_es6("apostrophe", keys)) {
                                             pracText1.text = (pracText1.text + "'");
                                         } else {
                                             if (_pj.in_es6("backslash", keys)) {
                                                 pracText1.text = (pracText1.text + "#");
                                             } else {
                                                 if (_pj.in_es6("minus", keys)) {
                                                     pracText1.text = (pracText1.text + "-");
                                                 } else {
                                                     if (_pj.in_es6("equal", keys)) {
                                                         pracText1.text = (pracText1.text + "=");
                                                     } else {
                                                         if (_pj.in_es6("semicolon", keys)) {
                                                             pracText1.text = (pracText1.text + ";");
                                                         } else {
                                                             if (_pj.in_es6("bracketleft", keys)) {
                                                                 pracText1.text = (pracText1.text + "[");
                                                             } else {
                                                                 if (_pj.in_es6("bracketright", keys)) {
                                                                     pracText1.text = (pracText1.text + "]");
                                                                 } else {
                                                                     if (_pj.in_es6("capslock", keys)) {
                                                                         pracText1.text = (pracText1.text + "");
                                                                     } else {
                                                                         if (_pj.in_es6("tab", keys)) {
                                                                             pracText1.text = (pracText1.text + "");
                                                                         } else {
                                                                             if (_pj.in_es6("lcommand", keys)) {
                                                                                 pracText1.text = (pracText1.text + "");
                                                                             } else {
                                                                                 if (_pj.in_es6("menu", keys)) {
                                                                                     pracText1.text = (pracText1.text + "");
                                                                                 } else {
                                                                                     if (_pj.in_es6("loption", keys)) {
                                                                                         pracText1.text = (pracText1.text + "");
                                                                                     } else {
                                                                                         if (_pj.in_es6("ralt", keys)) {
                                                                                             pracText1.text = (pracText1.text + "");
                                                                                         } else {
                                                                                             if (_pj.in_es6("lcontrol", keys)) {
                                                                                                 pracText1.text = (pracText1.text + "");
                                                                                             } else {
                                                                                                 if (_pj.in_es6("rcontrol", keys)) {
                                                                                                     pracText1.text = (pracText1.text + "");
                                                                                                 } else {
                                                                                                     if (_pj.in_es6("left", keys)) {
                                                                                                         pracText1.text = (pracText1.text + "");
                                                                                                     } else {
                                                                                                         if (_pj.in_es6("right", keys)) {
                                                                                                             pracText1.text = (pracText1.text + "");
                                                                                                         } else {
                                                                                                             if (_pj.in_es6("up", keys)) {
                                                                                                                 pracText1.text = (pracText1.text + "");
                                                                                                             } else {
                                                                                                                 if (_pj.in_es6("down", keys)) {
                                                                                                                     pracText1.text = (pracText1.text + "");
                                                                                                                 } else {
                                                                                                                     if (_pj.in_es6("delete", keys)) {
                                                                                                                         pracText1.text = (pracText1.text + "");
                                                                                                                     } else {
                                                                                                                         if (_pj.in_es6("grave", keys)) { // break key to skip through conditions if needed
                                                                                                                             continueRoutine = false;
                                                                                                                             practice_control.finished = true;
                                                                                                                         } else {
                                                                                                                             if (modify) {
                                                                                                                                 pracText1.text = (pracText1.text + keys[0].toUpperCase());
                                                                                                                                 modify = false;
                                                                                                                             } else {
                                                                                                                               pracText1.text = (pracText1.text + keys[0]);
                                                                                                                             }
                                                                                                                         }
                                                                                                                     }
                                                                                                                 }
                                                                                                             }
                                                                                                         }
                                                                                                     }
                                                                                                 }
                                                                                             }
                                                                                         }
                                                                                     }
                                                                                 }
                                                                             }
                                                                         }
                                                                     }
                                                                 }
                                                             }
                                                         }
                                                     }
                                                 }
                                             }
                                         }
                                     }
                                 }
                             }
                         }
                     }
                 }
            }
        }
    TextComponent dispPrac
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $pracWords
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    TextComponent pracText1
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent pracKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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  Routine pracContinue
    CodeComponent pracContCode
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        if (prac_counter === 0) {
            continueRoutine = false;
            } else if (prac_counter === 1) {
                continueRoutine = false;
                } else if (prac_counter === 3) {
                    continueRoutine = false;
                    } else if (prac_counter === 4) {
                        continueRoutine = false;
                        } else if (prac_counter === 6){
                            continueRoutine = false;
                            } else if (prac_counter === 7){
                                continueRoutine = false;
                                }

        if (prac_counter >= 8) {
            continueRoutine = false;
            practice_control.finished = true;
            }
      Begin Routine:
        if not practice_control.thisN in [2, 5]: # on most trials:
            continueRoutine = False
        if practice_control.thisN >= 8:
            practice_control.finished = True
      Each Frame:
        if pracContKey.keys == 'r':
            continueRoutine = False
        if pracContKey.keys == 'return':
            continueRoutine = False
            practice_control.finished = True
      Each JS Frame:
        if ((pracContKey.keys === "r")) {
            continueRoutine = false;
        }
        if ((pracContKey.keys === "return")) {
            continueRoutine = false;
            practice_control.finished = true;
        }
    TextComponent pracCont
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice.
        Please tell the experimenter.
    KeyboardComponent pracContKey
      allowedKeys = ['r', 'return']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine startBaseline
    TextComponent startSection1
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This is Section 1 of 4 of the main experiment.

        Type as QUICKLY and ACCURATELY as you can. Do not start to type the word until AFTER you see the prompt.

        You will be offered a short break halfway through the section (after 15 words). Feel free to take this as you need.  You will be offered breaks in all sections.

        Press 'enter/return' when you are ready to start.
    KeyboardComponent start_key3
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine baseline
    CodeComponent baseCounter
      Code Type = Both
      Begin JS Experiment:
        base_counter = -1
      Begin JS Routine:
        base_counter += 1
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_1.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                trials_1.finished = true;
            }
        }
    TextComponent baseWord
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $baseline_words
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    TextComponent baseFixation
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent base_typeText
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = Get ready!
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    KeyboardComponent baseBkgdKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = all keys
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  Routine baseTask
    CodeComponent base_Code
      Code Type = Both
      Begin JS Routine:
        //mykb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        //mykb.start();
        modify = false;
        text0.text = " ";
        event.clearEvents();
        // Clear keyboard events
        //mykb.clearEvents();
      Begin Routine:
        modify = False
        text0.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
        #typedCorr=[]
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
            if 'space' in keys:
                text0.text = text0.text + ' '
            elif 'backspace' in keys:
                text0.text = text0.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_1.finished = True
            elif 'comma' in keys:
                text0.text = text0.text + ','
            elif 'period' in keys:
                text0.text = text0.text + '.'
            elif 'slash' in keys:
                text0.text = text0.text + '/'
            elif 'pound' in keys:
                text0.text = text0.text + '#'
            elif 'apostrophe' in keys:
                text0.text = text0.text + "'"
            elif 'backslash' in keys:
                text0.text = text0.text + "\\" #only prints one slash
            elif 'minus' in keys:
                text0.text = text0.text + '-'
            elif 'equal' in keys:
                text0.text = text0.text + '='
            elif 'semicolon' in keys:
                text0.text = text0.text + ';'
            elif 'bracketleft' in keys:
                text0.text = text0.text + '['
            elif 'bracketright' in keys:
                text0.text = text0.text + ']'
            elif 'capslock' in keys:
                text0.text = text0.text + '' #display nothing
            elif 'tab' in keys:
                text0.text = text0.text + ''
            elif 'lwindows' in keys:
                text0.text = text0.text + ''
            elif 'menu' in keys:
                text0.text = text0.text + ''
            elif 'lalt' in keys:
                text0.text = text0.text + ''
            elif 'ralt' in keys:
                text0.text = text0.text + ''
            elif 'lctrl' in keys:
                text0.text = text0.text + ''
            elif 'rctrl' in keys:
                text0.text = text0.text + ''
            elif 'left' in keys:
                text0.text = text0.text + ''
            elif 'right' in keys:
                text0.text = text0.text + ''
            elif 'up' in keys:
                text0.text = text0.text + ''
            elif 'down' in keys:
                text0.text = text0.text + ''
            elif 'delete' in keys:
                text0.text = text0.text + ''
            else:
                if modify:
                    text0.text = text0.text + keys[0].upper()
                    modify = False
                else:
                    text0.text = text0.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                text0.text = (text0.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    text0.text = text0.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (_pj.in_es6("comma", keys)) {
                                text0.text = (text0.text + ",");
                            } else {
                                if (_pj.in_es6("period", keys)) {
                                    text0.text = (text0.text + ".");
                                } else {
                                    if (_pj.in_es6("slash", keys)) {
                                        text0.text = (text0.text + "/");
                                    } else {
                                         if (_pj.in_es6("apostrophe", keys)) {
                                             text0.text = (text0.text + "'");
                                         } else {
                                             if (_pj.in_es6("backslash", keys)) {
                                                 text0.text = (text0.text + "#");
                                             } else {
                                                 if (_pj.in_es6("minus", keys)) {
                                                     text0.text = (text0.text + "-");
                                                 } else {
                                                     if (_pj.in_es6("equal", keys)) {
                                                         text0.text = (text0.text + "=");
                                                     } else {
                                                         if (_pj.in_es6("semicolon", keys)) {
                                                             text0.text = (text0.text + ";");
                                                         } else {
                                                             if (_pj.in_es6("bracketleft", keys)) {
                                                                 text0.text = (text0.text + "[");
                                                             } else {
                                                                 if (_pj.in_es6("bracketright", keys)) {
                                                                     text0.text = (text0.text + "]");
                                                                 } else {
                                                                     if (_pj.in_es6("capslock", keys)) {
                                                                         text0.text = (text0.text + "");
                                                                     } else {
                                                                         if (_pj.in_es6("tab", keys)) {
                                                                             text0.text = (text0.text + "");
                                                                         } else {
                                                                             if (_pj.in_es6("lcommand", keys)) {
                                                                                 text0.text = (text0.text + "");
                                                                             } else {
                                                                                 if (_pj.in_es6("menu", keys)) {
                                                                                     text0.text = (text0.text + "");
                                                                                 } else {
                                                                                     if (_pj.in_es6("loption", keys)) {
                                                                                         text0.text = (text0.text + "");
                                                                                     } else {
                                                                                         if (_pj.in_es6("ralt", keys)) {
                                                                                             text0.text = (text0.text + "");
                                                                                         } else {
                                                                                             if (_pj.in_es6("lcontrol", keys)) {
                                                                                                 text0.text = (text0.text + "");
                                                                                             } else {
                                                                                                 if (_pj.in_es6("rcontrol", keys)) {
                                                                                                     text0.text = (text0.text + "");
                                                                                                 } else {
                                                                                                     if (_pj.in_es6("left", keys)) {
                                                                                                         text0.text = (text0.text + "");
                                                                                                     } else {
                                                                                                         if (_pj.in_es6("right", keys)) {
                                                                                                             text0.text = (text0.text + "");
                                                                                                         } else {
                                                                                                             if (_pj.in_es6("up", keys)) {
                                                                                                                 text0.text = (text0.text + "");
                                                                                                             } else {
                                                                                                                 if (_pj.in_es6("down", keys)) {
                                                                                                                     text0.text = (text0.text + "");
                                                                                                                 } else {
                                                                                                                     if (_pj.in_es6("delete", keys)) {
                                                                                                                         text0.text = (text0.text + "");
                                                                                                                     } else {
                                                                                                                         if (_pj.in_es6("grave", keys)) { // break key to skip through conditions if needed
                                                                                                                             continueRoutine = false;
                                                                                                                             trials_1.finished = true;
                                                                                                                         } else {
                                                                                                                             if (modify) {
                                                                                                                                 text0.text = (text0.text + keys[0].toUpperCase());
                                                                                                                                 modify = false;
                                                                                                                             } else {
                                                                                                                               text0.text = (text0.text + keys[0]);
                                                                                                                             }
                                                                                                                         }
                                                                                                                     }
                                                                                                                 }
                                                                                                             }
                                                                                                         }
                                                                                                     }
                                                                                                 }
                                                                                             }
                                                                                         }
                                                                                     }
                                                                                 }
                                                                             }
                                                                         }
                                                                     }
                                                                 }
                                                             }
                                                         }
                                                     }
                                                 }
                                             }
                                         }
                                     }
                                 }
                             }
                         }
                     }
                 }
            }
        }
      End JS Routine:
        trials_1.addData("base_typedWord", text0.text);
      End Routine:
        #if text0.text == display:
         #   typedCorr.append('1')
        #else:
         #   typedCorr.append('0')
            #Above not working

        trials_1.addData("base_typedWord", text0.text)
        #trials.addData("typedWordCorr", typedCorr)
    TextComponent dispBase
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $baseline_words
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    TextComponent text0
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent baseKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      correctAns = $words
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine baseline_break
    CodeComponent baseBreak
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        //if ((! _pj.in_es6(trials.thisN, [14]))) {
        //if ((! _pj.in_es6(trials_1.getTrialIndex(14)))) {
        //    continueRoutine = false;
        //}
        if (base_counter !== 14) {
            continueRoutine = false;
            }
      Begin Routine:
        if not trials_1.thisN in [14]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 14th loop iteration,
        #(after 15 trials), otherwise routine is not shown
    TextComponent base_break
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.
    ImageComponent BreakImage1
      image = video&audio/squirrelDrink.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent baseBreakKey
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine baseRateTyping
    CodeComponent skipCode
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                baseRateLoop.finished = True
    TextComponent baseRateType
      color = black
      letterHeight = 0.07
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rateInstr
      wrapWidth = 1.5
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    ImageComponent base_typeScale
      image [set every repeat] = $ratingScale
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent baseRateTypeKey
      allowedKeys = ['1', '2', '3', '4', '5']
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Pause
    TextComponent pauseHere
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        PAUSE HERE

        Tell the experimenter that you have completed the first section.
    KeyboardComponent start_key5
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine imagInstruct
    TextComponent imagery_instruct
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In the next sections of this experiment you may be asked to imagine yourself typing whilst you look at the word you need to type.

        When I say ‘imagine’, what I mean is that I want you to think about how it would look and feel if you were typing the word yourself. For example, you might imagine that you can see your hands moving across the keyboard and pressing the keys. You might also imagine how it would feel to press those keys and move your hands in that way. You could think about the muscles and joints moving in your fingers, hands and wrists that you would use to type the word.

        It is important that while you imagine this, you do not voluntarily move your hands. Keep your eyes open while you imagine.

        I am going to give you 20 seconds to give this a go. Please rest your hands on your keyboard, but do not deliberately type anything. I would like you to imagine typing the word, "drawer". Keep imagining for the full 20 seconds.
    KeyboardComponent start_key6
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrControl
    TextComponent cont_instr
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $contInstr
      wrapWidth = 1.5
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    ImageComponent contInstrImage
      image [set every repeat] = $cont_Ima
      pos = (0, -0.4)
      saveStartStop = False
      size [set every repeat] = (cont_w, cont_h)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_key9
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine control
    CodeComponent contCounter
      Code Type = Both
      Begin JS Experiment:
        cont_counter = -1
      Begin JS Routine:
        cont_counter += 1
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_3.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                trials_3.finished = true;
            }
        }
    TextComponent contWord
      color = black
      letterHeight = 0.1
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cont_time
      text [set every repeat] = $control_words
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = star
      size = (0.5, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cont_time
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    TextComponent cont_typeText
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $cont_time
      stopVal [duration (s)] = 1
      text = Get ready!
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    KeyboardComponent contBkgdKeys
      allowedKeys [set every repeat] = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $cont_bgkd_time
      store = all keys
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  Routine controlTask
    CodeComponent contCode
      Code Type = Both
      Begin JS Routine:
        //mykb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        //mykb.start();
        modify = false;
        text3.text = " ";
        event.clearEvents();
        // Clear keyboard events
        //mykb.clearEvents();
      Begin Routine:
        modify = False
        text3.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
        #typedCorr=[]
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
            #RTs.append(t) #add to the variable RTs the host clock given by 't'
            if 'space' in keys:
                text3.text = text3.text + ' '
            elif 'backspace' in keys:
                text3.text = text3.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift?
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_3.finished = True
            elif 'comma' in keys:
                text3.text = text3.text + ','
            elif 'period' in keys:
                text3.text = text3.text + '.'
            elif 'slash' in keys:
                text3.text = text3.text + '/'
            elif 'pound' in keys:
                text3.text = text3.text + '#'
            elif 'apostrophe' in keys:
                text3.text = text3.text + "'"
            elif 'backslash' in keys:
                text3.text = text3.text + "\\" #only prints one slash
            elif 'minus' in keys:
                text3.text = text3.text + '-'
            elif 'equal' in keys:
                text3.text = text3.text + '='
            elif 'semicolon' in keys:
                text3.text = text3.text + ';'
            elif 'bracketleft' in keys:
                text3.text = text3.text + '['
            elif 'bracketright' in keys:
                text3.text = text3.text + ']'
            elif 'capslock' in keys:
                text3.text = text3.text + '' #display nothing
            elif 'tab' in keys:
                text3.text = text3.text + ''
            elif 'lwindows' in keys:
                text3.text = text3.text + ''
            elif 'menu' in keys:
                text3.text = text3.text + ''
            elif 'lalt' in keys:
                text3.text = text3.text + ''
            elif 'ralt' in keys:
                text3.text = text3.text + ''
            elif 'lctrl' in keys:
                text3.text = text3.text + ''
            elif 'rctrl' in keys:
                text3.text = text3.text + ''
            elif 'left' in keys:
                text3.text = text3.text + ''
            elif 'right' in keys:
                text3.text = text3.text + ''
            elif 'up' in keys:
                text3.text = text3.text + ''
            elif 'down' in keys:
                text3.text = text3.text + ''
            elif 'delete' in keys:
                text3.text = text3.text + ''
            else:
                if modify:
                    text3.text = text3.text + keys[0].upper()
                    modify = False
                else:
                    text3.text = text3.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                text3.text = (text3.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    text3.text = text3.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (_pj.in_es6("comma", keys)) {
                                text3.text = (text3.text + ",");
                            } else {
                                if (_pj.in_es6("period", keys)) {
                                    text3.text = (text3.text + ".");
                                } else {
                                    if (_pj.in_es6("slash", keys)) {
                                        text3.text = (text3.text + "/");
                                    } else {
                                         if (_pj.in_es6("apostrophe", keys)) {
                                             text3.text = (text3.text + "'");
                                         } else {
                                             if (_pj.in_es6("backslash", keys)) {
                                                 text3.text = (text3.text + "#");
                                             } else {
                                                 if (_pj.in_es6("minus", keys)) {
                                                     text3.text = (text3.text + "-");
                                                 } else {
                                                     if (_pj.in_es6("equal", keys)) {
                                                         text3.text = (text3.text + "=");
                                                     } else {
                                                         if (_pj.in_es6("semicolon", keys)) {
                                                             text3.text = (text3.text + ";");
                                                         } else {
                                                             if (_pj.in_es6("bracketleft", keys)) {
                                                                 text3.text = (text3.text + "[");
                                                             } else {
                                                                 if (_pj.in_es6("bracketright", keys)) {
                                                                     text3.text = (text3.text + "]");
                                                                 } else {
                                                                     if (_pj.in_es6("capslock", keys)) {
                                                                         text3.text = (text3.text + "");
                                                                     } else {
                                                                         if (_pj.in_es6("tab", keys)) {
                                                                             text3.text = (text3.text + "");
                                                                         } else {
                                                                             if (_pj.in_es6("lcommand", keys)) {
                                                                                 text3.text = (text3.text + "");
                                                                             } else {
                                                                                 if (_pj.in_es6("menu", keys)) {
                                                                                     text3.text = (text3.text + "");
                                                                                 } else {
                                                                                     if (_pj.in_es6("loption", keys)) {
                                                                                         text3.text = (text3.text + "");
                                                                                     } else {
                                                                                         if (_pj.in_es6("ralt", keys)) {
                                                                                             text3.text = (text3.text + "");
                                                                                         } else {
                                                                                             if (_pj.in_es6("lcontrol", keys)) {
                                                                                                 text3.text = (text3.text + "");
                                                                                             } else {
                                                                                                 if (_pj.in_es6("rcontrol", keys)) {
                                                                                                     text3.text = (text3.text + "");
                                                                                                 } else {
                                                                                                     if (_pj.in_es6("left", keys)) {
                                                                                                         text3.text = (text3.text + "");
                                                                                                     } else {
                                                                                                         if (_pj.in_es6("right", keys)) {
                                                                                                             text3.text = (text3.text + "");
                                                                                                         } else {
                                                                                                             if (_pj.in_es6("up", keys)) {
                                                                                                                 text3.text = (text3.text + "");
                                                                                                             } else {
                                                                                                                 if (_pj.in_es6("down", keys)) {
                                                                                                                     text3.text = (text3.text + "");
                                                                                                                 } else {
                                                                                                                     if (_pj.in_es6("delete", keys)) {
                                                                                                                         text3.text = (text3.text + "");
                                                                                                                     } else {
                                                                                                                         if (_pj.in_es6("grave", keys)) { // break key to skip through conditions if needed
                                                                                                                             continueRoutine = false;
                                                                                                                             trials_3.finished = true;
                                                                                                                         } else {
                                                                                                                             if (modify) {
                                                                                                                                 text3.text = (text3.text + keys[0].toUpperCase());
                                                                                                                                 modify = false;
                                                                                                                             } else {
                                                                                                                               text3.text = (text3.text + keys[0]);
                                                                                                                             }
                                                                                                                         }
                                                                                                                     }
                                                                                                                 }
                                                                                                             }
                                                                                                         }
                                                                                                     }
                                                                                                 }
                                                                                             }
                                                                                         }
                                                                                     }
                                                                                 }
                                                                             }
                                                                         }
                                                                     }
                                                                 }
                                                             }
                                                         }
                                                     }
                                                 }
                                             }
                                         }
                                     }
                                 }
                             }
                         }
                     }
                 }
            }
        }
      End JS Routine:
        trials_3.addData("cont_typedWord", text3.text);
      End Routine:
        #if text0.text == display:
         #   typedCorr.append('1')
        #else:
         #   typedCorr.append('0')
            #Above not working

        trials_3.addData("cont_typedWord", text3.text)
        #trials.addData("typedWordCorr", typedCorr)
    TextComponent dispCont
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $control_words
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    TextComponent text3
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent contKeys
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine control_break
    CodeComponent contBreak
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (cont_counter !== 9) {
            continueRoutine = false;
            }
      Begin Routine:
        if not trials_3.thisN in [9]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 14th loop iteration,
        #(after 15 trials), otherwise routine is not shown
    TextComponent cont_break
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.
    ImageComponent breakImage4
      image = video&audio/catUnwind.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent contBreakKey
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine contRateTyping
    CodeComponent skipCode3
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                contRateLoop.finished = True
    TextComponent contRateType
      color = black
      letterHeight = 0.07
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rateInstr
      wrapWidth = 1.5
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    ImageComponent contTypeScale
      image [set every repeat] = $ratingScale
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent contTypeKey
      allowedKeys = ['1', '2', '3', '4', '5']
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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
  Routine instructions_AOMI_2
    TextComponent instrAOMI_2
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_2
      wrapWidth = 1.5
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    ImageComponent AOMIinstrImage2
      image [set every repeat] = $AOMI_Ima
      pos = (0, -0.4)
      saveStartStop = False
      size [set every repeat] = (AOMI_w, AOMI_h)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_key4
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AOMIprep2
    CodeComponent cancelLoop6
      Code Type = Both
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIpracLoop2.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                AOMIpracLoop2.finished = true;
            }
        }
    TextComponent AOMIprepTxt2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Rest your hands on your keyboard now.

        Observe and imagine!
  Routine AOMIprac2
    TextComponent AOMIpracText2
      color = black
      letterHeight = 0.1
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prac_time
      text [set every repeat] = $practiceWords
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    MovieComponent videoPrac2
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $pracVid_2
      saveStartStop = False
      size = [0.9, 0.6]
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prac_time
      units = height
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    KeyboardComponent bkgdkeys_prac2
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prac_time
      store = all keys
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    CodeComponent videoJS_prac2
      Code Type = Both
      Begin JS Routine:
        videoPrac2.stop();
        videoPrac2.seek(0);
        videoPrac2.play();
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMIpracLoop2.finished = True
      Each JS Frame:
        //break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                AOMIpracLoop2.finished = true;
            }
        }
      End JS Routine:
        videoPrac2.stop();
  Routine AOMI2
    CodeComponent AOMI2Counter
      Code Type = Both
      Begin JS Experiment:
        AOMI2_counter = -1
      Begin JS Routine:
        AOMI2_counter += 1
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_4.finished = True
    TextComponent text4
      color = black
      letterHeight = 0.1
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $cont_time
      text [set every repeat] = $AOMIsecond_words
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    MovieComponent video2
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $second_vids
      saveStartStop = False
      size = [0.9, 0.6]
      startVal [time (s)] = 0
      stopVal [duration (s)] = $cont_time
      units = height
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    KeyboardComponent bkgdKeys4
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cont_time
      store = all keys
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    CodeComponent videoJS_2
      Code Type = JS
      Begin JS Routine:
        video2.stop();
        video2.seek(0);
        video2.play();
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                trials_4.finished = true;
            }
        }
      End JS Routine:
        video2.stop();
  Routine task4
    CodeComponent code4
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text5.text = " ";
        event.clearEvents();
        //RTs = [];
      Begin Routine:
        modify = False
        text5.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
        #RTs=[] #make a list
      Each Frame:
        keys = event.getKeys() #gets the keys pressed as a string
        if len(keys):
            #RTs.append(t) #add to the variable RTs the host clock given by 't'
            if 'space' in keys:
                text5.text = text5.text + ' '
            elif 'backspace' in keys:
                text5.text = text5.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift?
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                trials_4.finished = True
            elif 'comma' in keys:
                text5.text = text5.text + ','
            elif 'period' in keys:
                text5.text = text5.text + '.'
            elif 'slash' in keys:
                text5.text = text5.text + '/'
            elif 'pound' in keys:
                text5.text = text5.text + '#'
            elif 'apostrophe' in keys:
                text5.text = text5.text + "'"
            elif 'backslash' in keys:
                text5.text = text5.text + "\\" #only prints one slash
            elif 'minus' in keys:
                text5.text = text5.text + '-'
            elif 'equal' in keys:
                text5.text = text5.text + '='
            elif 'semicolon' in keys:
                text5.text = text5.text + ';'
            elif 'bracketleft' in keys:
                text5.text = text5.text + '['
            elif 'bracketright' in keys:
                text5.text = text5.text + ']'
            elif 'capslock' in keys:
                text5.text = text5.text + '' #display nothing
            elif 'tab' in keys:
                text5.text = text5.text + ''
            elif 'lwindows' in keys:
                text5.text = text5.text + ''
            elif 'menu' in keys:
                text5.text = text5.text + ''
            elif 'lalt' in keys:
                text5.text = text5.text + ''
            elif 'ralt' in keys:
                text5.text = text5.text + ''
            elif 'lctrl' in keys:
                text5.text = text5.text + ''
            elif 'rctrl' in keys:
                text5.text = text5.text + ''
            elif 'left' in keys:
                text5.text = text5.text + ''
            elif 'right' in keys:
                text5.text = text5.text + ''
            elif 'up' in keys:
                text5.text = text5.text + ''
            elif 'down' in keys:
                text5.text = text5.text + ''
            elif 'delete' in keys:
                text5.text = text5.text + ''
            else:
                if modify:
                    text5.text = text5.text + keys[0].upper()
                    modify = False
                else:
                    text5.text = text5.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                text5.text = (text5.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    text5.text = text5.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (_pj.in_es6("comma", keys)) {
                                pracText1.text = (pracText1.text + ",");
                            } else {
                                if (_pj.in_es6("period", keys)) {
                                    text5.text = (text5.text + ".");
                                } else {
                                    if (_pj.in_es6("slash", keys)) {
                                        text5.text = (text5.text + "/");
                                    } else {
                                         if (_pj.in_es6("apostrophe", keys)) {
                                             text5.text = (text5.text + "'");
                                         } else {
                                             if (_pj.in_es6("backslash", keys)) {
                                                 text5.text = (text5.text + "#");
                                             } else {
                                                 if (_pj.in_es6("minus", keys)) {
                                                     text5.text = (text5.text + "-");
                                                 } else {
                                                     if (_pj.in_es6("equal", keys)) {
                                                         text5.text = (text5.text + "=");
                                                     } else {
                                                         if (_pj.in_es6("semicolon", keys)) {
                                                             text5.text = (text5.text + ";");
                                                         } else {
                                                             if (_pj.in_es6("bracketleft", keys)) {
                                                                 text5.text = (text5.text + "[");
                                                             } else {
                                                                 if (_pj.in_es6("bracketright", keys)) {
                                                                     text5.text = (text5.text + "]");
                                                                 } else {
                                                                     if (_pj.in_es6("capslock", keys)) {
                                                                         text5.text = (text5.text + "");
                                                                     } else {
                                                                         if (_pj.in_es6("tab", keys)) {
                                                                             text5.text = (text5.text + "");
                                                                         } else {
                                                                             if (_pj.in_es6("lcommand", keys)) {
                                                                                 text5.text = (text5.text + "");
                                                                             } else {
                                                                                 if (_pj.in_es6("menu", keys)) {
                                                                                     text5.text = (text5.text + "");
                                                                                 } else {
                                                                                     if (_pj.in_es6("loption", keys)) {
                                                                                         text5.text = (text5.text + "");
                                                                                     } else {
                                                                                         if (_pj.in_es6("ralt", keys)) {
                                                                                             text5.text = (text5.text + "");
                                                                                         } else {
                                                                                             if (_pj.in_es6("lcontrol", keys)) {
                                                                                                 text5.text = (text5.text + "");
                                                                                             } else {
                                                                                                 if (_pj.in_es6("rcontrol", keys)) {
                                                                                                     text5.text = (text5.text + "");
                                                                                                 } else {
                                                                                                     if (_pj.in_es6("left", keys)) {
                                                                                                         text5.text = (text5.text + "");
                                                                                                     } else {
                                                                                                         if (_pj.in_es6("right", keys)) {
                                                                                                             text5.text = (text5.text + "");
                                                                                                         } else {
                                                                                                             if (_pj.in_es6("up", keys)) {
                                                                                                                 text5.text = (text5.text + "");
                                                                                                             } else {
                                                                                                                 if (_pj.in_es6("down", keys)) {
                                                                                                                     text5.text = (text5.text + "");
                                                                                                                 } else {
                                                                                                                     if (_pj.in_es6("delete", keys)) {
                                                                                                                         text5.text = (text5.text + "");
                                                                                                                     } else {
                                                                                                                         if (_pj.in_es6("grave", keys)) { // break key to skip through conditions if needed
                                                                                                                             continueRoutine = false;
                                                                                                                             trials_4.finished = true;
                                                                                                                         } else {
                                                                                                                             if (modify) {
                                                                                                                                 text5.text = (text5.text + keys[0].toUpperCase());
                                                                                                                                 modify = false;
                                                                                                                             } else {
                                                                                                                               text5.text = (text5.text + keys[0]);
                                                                                                                             }
                                                                                                                         }
                                                                                                                     }
                                                                                                                 }
                                                                                                             }
                                                                                                         }
                                                                                                     }
                                                                                                 }
                                                                                             }
                                                                                         }
                                                                                     }
                                                                                 }
                                                                             }
                                                                         }
                                                                     }
                                                                 }
                                                             }
                                                         }
                                                     }
                                                 }
                                             }
                                         }
                                     }
                                 }
                             }
                         }
                     }
                 }
            }
        }
      End JS Routine:
        trials_4.addData("AOMI2_typedWord", text5.text);
      End Routine:
        trials_4.addData("AOMI2_typedWord", text5.text)
        #trials_2.addData("holdTimes", duration)
        #trials_2.addData("RTs", RTs)
        #trials_2.addData("keyRelease", releases)
    TextComponent display4
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $AOMIsecond_words
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    TextComponent text5
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent keyboardCom4
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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  Routine Break4
    CodeComponent breakCode4
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        if (AOMI2_counter !== 9) {
            continueRoutine = false;
            }
      Begin Routine:
        if not trials_4.thisN in [9]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 14th loop iteration,
        #(after 15 trials), otherwise routine is not shown
    TextComponent breakText4_1
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.

        REMINDER: Make sure you watch the videos during the task!
    ImageComponent breakImage5
      image = video&audio/kittenBrew.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent breakText4_
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AOMI2rateTyping
    CodeComponent skipCode4
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                AOMI2rateLoop.finished = True
    TextComponent AOMI2rateType
      color = black
      letterHeight = 0.07
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rateInstr
      wrapWidth = 1.5
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    ImageComponent AOMI2typeScale
      image [set every repeat] = $ratingScale
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.3, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent AOMI2typeKey
      allowedKeys = ['1', '2', '3', '4', '5']
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine imageryQ
    TextComponent finalQ_text
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You have now completed this experiment!

        Please tell the experimenter and they will send you a link to complete a final short questionnaire to end this session.

        Thank you for your participation.

        Press 'enter/return' to end the experiment.
    KeyboardComponent end_exp
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AOMI1_break2
    CodeComponent AOMI1break2
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        //if ((! _pj.in_es6(trials_2.thisN, [14]))) {
        //if ((! _pj.in_es6(trials_2.getTrialIndex(14)))) {
        if (AOMI1_counter !== 19) {
            continueRoutine = false;
            }


        /*if (AOMI1_counter !== 9) {
            continueRoutine = false;
            } else if (AOMI1_counter !== 19) {
                continueRoutine = false;
                }*/

        //if( (A && !B) || (B && !A) ) { ... }
      Begin Routine:
        if not trials_2.thisN in [19]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 14th loop iteration,
        #(after 15 trials), otherwise routine is not shown
      Each JS Frame:
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    TextComponent AOMIbreakTxt2
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.

        REMINDER: Make sure you watch the videos during the task!
    ImageComponent breakImage3
      image = video&audio/frogsMoment.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent AOMI1breakKey2
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Break4_2
    CodeComponent breakCode4_2
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        if (AOMI2_counter !== 19) {
            continueRoutine = false;
            }
      Begin Routine:
        if not trials_4.thisN in [19]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 14th loop iteration,
        #(after 15 trials), otherwise routine is not shown
    TextComponent breakText4_2
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.

        REMINDER: Make sure you watch the videos during the task!
    ImageComponent breakImage6
      image = video&audio/relaxPolar.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent breakText4_3
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stop
    TextComponent stop_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        STOP!

        Please alert the experimenter that you have reached Section 3.
    KeyboardComponent stop_cont
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine control_break2
    CodeComponent contBreak2
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        //if ((! _pj.in_es6(trials_2.thisN, [14]))) {
        //if ((! _pj.in_es6(trials_2.getTrialIndex(14)))) {
        if (cont_counter !== 19) {
            continueRoutine = false;
            }


        /*if (AOMI1_counter !== 9) {
            continueRoutine = false;
            } else if (AOMI1_counter !== 19) {
                continueRoutine = false;
                }*/

        //if( (A && !B) || (B && !A) ) { ... }
      Begin Routine:
        if not trials_3.thisN in [19]: # on most trials:
            continueRoutine = False
        #Only show this routine on the 19th loop iteration,
        #(after 20 trials), otherwise routine is not shown
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                trials_3.finished = true;
            }
        }
    TextComponent cont_break2
      color = black
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press 'enter/return' when you are ready to continue.
    ImageComponent breakImage7
      image = video&audio/frogsMoment.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent contBreakKey2
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine control_prac
    CodeComponent contCounter_prac
      Code Type = Both
      Begin JS Experiment:
        cont_counter = -1
      Begin JS Routine:
        cont_counter += 1
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
         if 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
                contPracLoop.finished = True
      Each JS Frame:
        // break key to skip through conditions if needed
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("grave", keys)) {
                continueRoutine = false;
                contPracLoop.finished = true;
            }
        }
    TextComponent contWord_prac
      color = black
      letterHeight = 0.1
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prac_time
      text [set every repeat] = $practiceWords
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    PolygonComponent polygon_prac
      fillColor = black
      lineColor = black
      shape = star
      size = (0.5, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = prac_time
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    TextComponent cont_typeText_prac
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $prac_time
      stopVal [duration (s)] = 1
      text [set every repeat] = Get ready!
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    KeyboardComponent contBkgdKeys_prac
      allowedKeys [set every repeat] = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prac_bkgd_time
      store = all keys
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  Routine contTask_prac
    CodeComponent contCode_prac
      Code Type = Py
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      Begin Routine:
        modify = False
        text3_prac.text = ' ' #sets the text from the text component as a string
        event.clearEvents('keyboard') #clears any keyboard presses from prior to the start of the routine
        #typedCorr=[]
      Each Frame:
        keys = event.getKeys() #gets the keys pressed
        if len(keys):
            #RTs.append(t) #add to the variable RTs the host clock given by 't'
            if 'space' in keys:
                text3_prac.text = text3_prac.text + ' '
            elif 'backspace' in keys:
                text3_prac.text = text3_prac.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True #make a capital letter with shift?
            elif 'return' in keys:
                continueRoutine = False
            elif 'quoteleft' in keys: #break key to skip through conditions if needed
                continueRoutine = False
            elif 'comma' in keys:
                text3_prac.text = text3_prac.text + ','
            elif 'period' in keys:
                text3_prac.text = text3_prac.text + '.'
            elif 'slash' in keys:
                text3_prac.text = text3_prac.text + '/'
            elif 'pound' in keys:
                text3_prac.text = text3_prac.text + '#'
            elif 'apostrophe' in keys:
                text3_prac.text = text3_prac.text + "'"
            elif 'backslash' in keys:
                text3_prac.text = text3_prac.text + "\\" #only prints one slash
            elif 'minus' in keys:
                text3_prac.text = text3_prac.text + '-'
            elif 'equal' in keys:
                text3_prac.text = text3_prac.text + '='
            elif 'semicolon' in keys:
                text3_prac.text = text3_prac.text + ';'
            elif 'bracketleft' in keys:
                text3_prac.text = text3_prac.text + '['
            elif 'bracketright' in keys:
                text3_prac.text = text3_prac.text + ']'
            elif 'capslock' in keys:
                text3_prac.text = text3_prac.text + '' #display nothing
            elif 'tab' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'lwindows' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'menu' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'lalt' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'ralt' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'lctrl' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'rctrl' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'left' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'right' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'up' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'down' in keys:
                text3_prac.text = text3_prac.text + ''
            elif 'delete' in keys:
                text3_prac.text = text3_prac.text + ''
            else:
                if modify:
                    text3_prac.text = text3_prac.text + keys[0].upper()
                    modify = False
                else:
                    text3_prac.text = text3_prac.text + keys[0]
      End Routine:
        #if text0.text == display:
         #   typedCorr.append('1')
        #else:
         #   typedCorr.append('0')
            #Above not working

        contPracLoop.addData("contPrac_typedWord", text3_prac.text)
        #trials.addData("typedWordCorr", typedCorr)
    TextComponent dispCont_prac
      color = black
      letterHeight = 0.1
      pos = (0, -0.35)
      saveStartStop = False
      text [set every repeat] = $practiceWords
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    TextComponent text3_prac
      color = black
      letterHeight = 0.1
      saveStartStop = False
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    KeyboardComponent contKeys_prac
      allowedKeys = ['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space','comma','period','slash','backslash','apostrophe','semicolon','bracketleft','bracketright','1','2','3','4','5','6','7','8','9','0','capslock','tab','lctrl','rctrl', 'rshift','lshift','ralt', 'lalt', 'quoteleft', 'minus', 'equal', 'lwindows', 'menu', 'delete', 'pound', 'left', 'right', 'up', 'down']
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine startMainCont
    TextComponent startControl
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You have completed the practice.

        Remember to place your hands on your keyboard and say random numbers whenever you see the star.

        You will be offered breaks after every 10 words (twice in this section). Please take these as you need them.

        Press 'enter/return' on your keyboard when you are ready to start the task.
    KeyboardComponent start_key10
      allowedKeys = ['return']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructLoop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'begInstruct': "In this experiment, your task will be to type the word that you see on the screen. \n\nYou will see a word for a couple of seconds with a cross. After this you will see ‘Get ready!' appear. This is your prompt to get ready to type.\n\nYou will then see the same word on the screen. This is when you should start to type. Type the word as QUICKLY and ACCURATELY as you can. By this we mean, not so fast that you lose accuracy, but also not so accurate that you type very slowly. Try to find a middle ground between the two.\n\nOnce you have typed the word, press 'enter/return' to su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,
      {'begInstruct': "If you make any errors, you can correct these by pressing ‘backspace’ on your keyboard before pressing ‘enter’ - just like if you were typing normally on your computer. Errors are normal so please don’t worry about this. Just try to be as accurate as you can. \n\nYou will have a practice round to get used to the task. Ask the experimenter any questions you have now.\n\nPress 'enter/return' to start the practice when you are ready. "},
      {'begInstruct': "This is the practice round. \n\nPress 'enter/return' to start."}]
    Routine baseInstructions
  LoopTerminator instructLoop
  LoopInitiator practice_control loopType="TrialHandler"
    conditionsFile = controlPractice.xlsx
    loopType = random
    nReps = 3
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    Routine practice
    Routine pracTask
    Routine pracContinue
  LoopTerminator practice_control
  Routine startBaseline
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    loopType = random
    nReps = 1
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    Routine baseline
    Routine baseTask
    Routine baseline_break
  LoopTerminator trials_1
  LoopInitiator baseRateLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = scales.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ratingScale': 'typingRatingScale.png', 'rateInstr': 'How would you rate your typing performance in the previous section?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'},
      {'ratingScale': 'imageryCheckScale.png', 'rateInstr': 'In the previous section did you imagine yourself typing?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'},
      {'ratingScale': 'visualImageryScale.png', 'rateInstr': 'While imagining yourself typing, how clear was your visual image?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'},
      {'ratingScale': 'kinestheticImageryScale.png', 'rateInstr': 'While imagining yourself typing, how intense were the sensations associated with the imagined movement?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'}]
    Routine baseRateTyping
  LoopTerminator baseRateLoop
  Routine Pause
  Routine imagInstruct
  LoopInitiator AOMIinstrLoop1 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions_AOMI
  LoopTerminator AOMIinstrLoop1
  LoopInitiator AOMIpracLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine AOMIprep
    Routine AOMIprac
    Routine typePrep
    Routine taskAOMI_prac
  LoopTerminator AOMIpracLoop
  Routine startMainAOMI
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    loopType = random
    nReps = 1
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    Routine AOMI
    Routine typePrep
    Routine AOMI1task
    Routine AOMI1_break
    Routine AOMI1_break2
  LoopTerminator trials_2
  LoopInitiator AOMI1rateLoop loopType="TrialHandler"
    Selected rows = $[0,2,3]
    conditionsFile = scales.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ratingScale': 'typingRatingScale.png', 'rateInstr': 'How would you rate your typing performance in the previous section?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'},
      {'ratingScale': 'imageryCheckScale.png', 'rateInstr': 'In the previous section did you imagine yourself typing?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'},
      {'ratingScale': 'visualImageryScale.png', 'rateInstr': 'While imagining yourself typing, how clear was your visual image?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'},
      {'ratingScale': 'kinestheticImageryScale.png', 'rateInstr': 'While imagining yourself typing, how intense were the sensations associated with the imagined movement?\n\nPress a number on your keyboard according to the rating scale below to give your answer.\n\nYour first answer will be accepted.'}]
    Routine AOMI1rateTyping
  LoopTerminator AOMI1rateLoop
  Routine stop
  LoopInitiator contInstrLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instrControl
  LoopTerminator contInstrLoop
  LoopInitiator contPracLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine control_prac
    Routine contTask_prac
  LoopTerminator contPracLoop
  Routine startMainCont
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    loopType = random
    nReps = 1
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    Routine control
    Routine controlTask
    Routine control_break
    Routine control_break2
  LoopTerminator trials_3
  LoopInitiator contRateLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = scales.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine contRateTyping
  LoopTerminator contRateLoop
  LoopInitiator AOMIinstrLoop2 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions_AOMI_2
  LoopTerminator AOMIinstrLoop2
  LoopInitiator AOMIpracLoop2 loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine AOMIprep2
    Routine AOMIprac2
    Routine typePrep
    Routine taskAOMI_prac
  LoopTerminator AOMIpracLoop2
  Routine startMainAOMI
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = $"Group_"+expInfo['group']+".xlsx"
    loopType = random
    nReps = 1
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    Routine AOMI2
    Routine typePrep
    Routine task4
    Routine Break4
    Routine Break4_2
  LoopTerminator trials_4
  LoopInitiator AOMI2rateLoop loopType="TrialHandler"
    Selected rows = $[0,2,3]
    conditionsFile = scales.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine AOMI2rateTyping
  LoopTerminator AOMI2rateLoop
  Routine imageryQ
